PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = EEG_Hyperscanning
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the EEG Hyperscanning task

        The first block will be simple hand motions such as open and closed fists and hand rotation.

        The second block will include more complicated hand motions such as different numbers of fingers displayed on the hand.

        Each different task will include a rest block in between where you will simply look at the center of the screen idely.

        Press Spacebar to continue
    KeyboardComponent next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine baseline
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Please relax and look at the center of the screen for 15 seconds.
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    SoundComponent sound_2
      sound = baseline.wav
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[3])
  Routine simple_nonsync
    SoundComponent start_sound
      sound = simple_nonsync.wav
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Please do non-synchronized simple movements for 90 seconds. Please listen for the tone to start.
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  Routine complex_nonsync
    SoundComponent start_sound_2
      sound = complex_nonsync.wav
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = Please do non-synchronized complex hand motions for 90 seconds
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  Routine sync_complex_A
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Participant A, please do complex hand motions for 90 seconds. Participant B, please imitate.
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    SoundComponent sound_3
      sound = sync_complex_A.wav
      startVal [time (s)] = 0.0
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  Routine sync_complex_b
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Participant B, please do complex hand motions for 90 seconds. Participant A, please imitate.
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    SoundComponent sound_4
      sound = sync_complex_B.wav
      startVal [time (s)] = 0.0
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  Routine sync_simple_A
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Participant A, please do simple hand motions for 90 seconds. Participant B, please imitate.
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    SoundComponent sound_5
      sound = sync_simple_A.wav
      startVal [time (s)] = 0.0
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  Routine sync_simple_b
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Participant B, please do simple hand motions for 90 seconds. Participant A, please imitate.
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    SoundComponent sound_6
      sound = sync_simple_B.wav
      startVal [time (s)] = 0.0
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  Routine finish
    SoundComponent sound_1
      sound = Thats-All-Folks.wav
      startVal [time (s)] = 0.0
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = That's the end of the experiment. Thank you!
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  Routine simple_timing
    SoundComponent sound_8
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_9
      sound = A
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_10
      sound = A
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_11
      sound = A
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_12
      sound = A
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_13
      sound = A
      startVal [time (s)] = 50
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_14
      sound = A
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_15
      sound = A
      startVal [time (s)] = 70
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_16
      sound = A
      startVal [time (s)] = 80
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_17
      sound = A
      startVal [time (s)] = 90
      stopVal [duration (s)] = 0.25
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Please alternate hand signal after each beep.
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[1])
  Routine complex_timing
    SoundComponent sound_7
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_18
      sound = A
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_19
      sound = A
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_20
      sound = A
      startVal [time (s)] = 15
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_21
      sound = A
      startVal [time (s)] = 20
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_22
      sound = A
      startVal [time (s)] = 25
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_23
      sound = A
      startVal [time (s)] = 30
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_24
      sound = A
      startVal [time (s)] = 35
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_26
      sound = A
      startVal [time (s)] = 40
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_25
      sound = A
      startVal [time (s)] = 45
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_27
      sound = A
      startVal [time (s)] = 50
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_31
      sound = A
      startVal [time (s)] = 55
      stopVal [duration (s)] = 0.25
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    SoundComponent sound_32
      sound = A
      startVal [time (s)] = 60
      stopVal [duration (s)] = 0.25
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      text = Please alternate hand position after every beep.
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[2])
  Routine load_triggers
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name="Trigger", type="Markers", channel_count=1, channel_format='int32', source_id="Aurora")
        outlet = StreamOutlet(info)
Flow
  Routine load_triggers
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine baseline
    Routine simple_nonsync
    Routine simple_timing
    Routine baseline
    Routine complex_nonsync
    Routine complex_timing
    Routine baseline
    Routine sync_complex_A
    Routine complex_timing
    Routine baseline
    Routine sync_complex_b
    Routine complex_timing
    Routine baseline
    Routine sync_simple_A
    Routine simple_timing
    Routine baseline
    Routine sync_simple_b
    Routine simple_timing
  LoopTerminator trials
  Routine finish
